[[model]]
name: ohara-2011
date: 2016-07-13
author: Henry Sutanto -- Maastricht University
desc: """
    Myokit implementation of the O'Hara-Rudy dynamic (ORd) model for the
    undiseased human ventricular action potential and calcium transient.

    Based on the matlab code published on the rudylab website (see below) and
    checked against the supplement published with [1]

    References:
    [1] O'Hara et al. (2011) Simulation of the Undiseased Human Cardiac
    Ventricular Action Potential: Model Formulation and Experimental
    Validation. PLoS Computational Biology
    doi: 10.1371/journal.pcbi.1002061


    Original copyright notice:
    ---------------------------------------------------------------------------
    MATLAB Implementation of the O'Hara-Rudy dynamic (ORd) model for the
    undiseased human ventricular action potential and calcium transient

    The ORd model is described in the article "Simulation of the Undiseased
    Human Cardiac Ventricular Action Potential: Model Formulation and
    Experimental Validation"
    by Thomas O'Hara, Laszlo Virag, Andras Varro, and Yoram Rudy

    The article and supplemental materails are freely available in the
    Open Access jounal PLoS Computational Biology
    Link to Article:
    http://www.ploscompbiol.org/article/info:doi/10.1371/journal.pcbi.1002061

    Email: tom.ohara@gmail.com / rudy@wustl.edu
    Web: http://rudylab.wustl.edu

    The ORd model is free software: you can redistribute it and/or modify it
    under the terms of the GNU General Public License as published by the
    Free Software Foundation, either version 3 of the License, or (at your
    option) any later version. The ORd model is distributed in the hope that
    it will be useful, but WITHOUT ANY WARRANTY; without even the implied
    warranty of MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
    GNU General Public License for more details (www.gnu.org/licenses)
    """
"""
###Changelog###
Up to 22/03/2019 : 
- State-dependent markov INa has been implemented 
- Markov INa has been validated (drug-free, Flecainide, Lidocaine, Vernakalant) --> Further improvement might still be needed.
"""    
# Initial values
membrane.V      = -87   # V=-87              1
sodium.Nai      = 7     # nai=7              2
sodium.Na_ss    = 7     # nass=nai           3
potassium.Ki    = 140  # ki=145             4
potassium.K_ss  = 145   # kss=ki             5
calcium.Cai     = 1e-4  # cai=1.0e-4         6
calcium.Ca_ss   = 1e-4  # cass=cai           7
calcium.Ca_nsr  = 1.2   # cansr=1.2          8
calcium.Ca_jsr  = 1.2   # cajsr=cansr        9
ina.m           = 0     # m=0               10
ina.hf          = 1     # hf=1              11
ina.hs          = 1     # hs=1              12
ina.j           = 1     # j=1               13
ina.hsp         = 1     # hsp=1             14
ina.jp          = 1     # jp=1              15
inal.m          = 0     # mL=0              16
inal.h          = 1     # hL=1              17
inal.hp         = 1     # hLp=1             18
ito.a           = 0     # a=0               19
ito.if          = 1     # iF=1              20
ito.is          = 1     # iS=1
ito.ap          = 0     # ap=0              22
ito.ifp         = 1     # iFp=1             23
ito.isp         = 1     # iSp=1
ical.d          = 0     # d=0               25
ical.ff         = 1     # ff=1              26
ical.fs         = 1     # fs=1
ical.fcaf       = 1     # fcaf=1            28
ical.fcas       = 1     # fcas=1
ical.jca        = 1     # jca=1             30
ical.nca        = 0     # nca=0
ical.ffp        = 1     # ffp=1             32
ical.fcafp      = 1     # fcafp=1           33
ikr.xf          = 0     # xrf=0
ikr.xs          = 0     # xrs=0             35
iks.x1          = 0     # xs1=0             36
iks.x2          = 0     # xs2=0
iks.x_jun       = 0.0339469110711727
iks.x_sl        = 0.0329040051014557
ik1.x           = 1     # xk1=1             38
isk.x           = 1    
ryr.Jrelnp      = 0     # Jrelnp=0
ryr.Jrelp       = 0     # Jrelp=0           40
camk.CaMKt      = 0     # CaMKt=0           41
"""
I_Na_Markov.C3 = 0.99
I_Na_Markov.C2 = 0.01
I_Na_Markov.C1 = 0  
I_Na_Markov.O  = 0  
I_Na_Markov.IF = 0  
I_Na_Markov.IC3 = 0 
I_Na_Markov.IC2 = 0 
I_Na_Markov.IM1 = 0 
I_Na_Markov.IM2 = 0 

I_Na_Markov.IFB = 0  
I_Na_Markov.IC3B = 0 
I_Na_Markov.IC2B = 0 
I_Na_Markov.OB = 0
"""
I_Na_Markov.IC3 = 0
I_Na_Markov.IC2 = 0
I_Na_Markov.IF = 0
I_Na_Markov.C3 = 1.00
I_Na_Markov.C2 = 0
I_Na_Markov.C1 = 0
I_Na_Markov.O = 0
I_Na_Markov.IS = 0
I_Na_Markov.DpIC3 = 0
I_Na_Markov.DpIC2 = 0
I_Na_Markov.DpIF = 0
I_Na_Markov.DpC3 = 0
I_Na_Markov.DpC2 = 0
I_Na_Markov.DpC1 = 0
I_Na_Markov.DpO = 0
I_Na_Markov.DpIS = 0
I_Na_Markov.DpIT = 0
I_Na_Markov.DIC3 = 0
I_Na_Markov.DIC2 = 0
I_Na_Markov.DIF = 0
I_Na_Markov.DC3 = 0
I_Na_Markov.DC2 = 0
I_Na_Markov.DC1 = 0
I_Na_Markov.DO = 0
I_Na_Markov.DIS = 0
I_Na_Markov.DIT = 0

[parameters]
ICaL_Block = 0.0
IK1_Block = 0.0
IKr_Block = 0.0
IKs_Block = 0.0
IKur_Block = 0.0
INa_Block = 0.0
INaL_Block = 0.0
INaK_Block = 0.0
INCX_Block = 0.0
Ito_Block = 0.0

Ca_o = 1.8 [mmol/L] : Extracellular Ca2+ concentration
K_o = 5.4 [mmol/L] : Extracellular K+ concentration
Na_o = 140 [mmol/L] : Extracellular Na+ concentration

[output]
Vm = membrane.V
Cai = 1000 * calcium.Cai #micromolar/l
#dVdt = dot(membrane.V)

#
# Engine variables
#
[engine]
time = 0 in [ms] bind time
pace = 0 bind pace

#
# Membrane potential
# Page 5
#
[membrane]
markov_Na = 1
dot(V) = -(i_ion + stimulus.i_stim + stimulus.i_diff)
    label membrane_potential
    in [mV]
i_ion = (sodium.INa_tot
        + sodium.INa_ss_tot
        + calcium.ICa_tot
        + calcium.ICa_ss_tot
        + potassium.IK_tot 
        + potassium.IK_ss_tot
        )
    label cellular_current
    in [uA/uF]

#
# Stimulus current
# Page 5
#
[stimulus]
i_stim = engine.pace * amplitude
amplitude = if(extra.passini == 1, -53, -80) 
    in [uA/uF]
i_diff = 0 bind diffusion_current

#
# Cell geometry
# Page 6
#
[cell]
mode = 0
    desc: The type of cell. Endo = 0, Epi = 1, Mid = 2
L = 0.01 [cm] : Cell length
r = 0.0011 [cm] :  Cell radius
vcell = 1000 * 3.14 * r * r * L
    in [uL]
    desc: Cell volume
Ageo = 2*3.14 * r * r + 2 * 3.14 * r * L
    in [cm^2]
    desc: Geometric cell area
Acap = 2 * Ageo
    in [cm^2]
    desc: Capacitative membrane area
AF = Acap / phys.F
vmyo = 0.68 * vcell
    in [uL]
    desc: Volume of the cytosolic compartment
vnsr = 0.0552 * vcell
    in [uL]
    desc: Volume of the NSR compartment
vjsr = 0.0048 * vcell
    in [uL]
    desc: Volume of the JSR compartment
vss = 0.02 * vcell
    in [uL]
    desc: Volume of the Submembrane space near the T-tubules

#
# Physical constants
# Page 2
#
[phys]
R = 8314  [J/kmol/K] : Gas constant
T = 310   [K] : Temperature
F = 96485 [C/mol] : Faraday's constant
RTF  = R*T/F
FRT  = F/(R*T)
FFRT = F*F/(R*T)

#
# Extracellular concentrations
# Page 5
#
[extra]
Nao = (if(passini == 1, parameters.Na_o, 140)) 
    in [mmol/L] #: Extracellular Na+ concentration
Cao = parameters.Ca_o : Extracellular Ca2+ concentration
Ko  = parameters.K_o : Extracellular K+ concentration
KChannelCaLevel_K1 = -1
KChannelCaLevel_Ks = -1
KChannelCaLevel_SK = -1
passini = 1 

#
# Reversal potentials
# Page 6
#
[nernst]
ENa = phys.RTF * log(extra.Nao / sodium.Nai)
    in [mV]
    desc: Reversal potential for Sodium currents
EK = if(extra.passini == 1, -77.6, (phys.RTF * log(extra.Ko / potassium.Ki)))
    in [mV]
    desc: Reversal potential for Potassium currents
PNaK = 0.01833
    desc: Permeability ratio K+ to Na+
EKs = phys.RTF * log((extra.Ko + PNaK * extra.Nao) / (potassium.Ki + PNaK * sodium.Nai))
    desc: Reversal potential for IKs
    in [mV]

#
# INa :: Fast Sodium current
# Page 6
#
# The fast sodium current is modelled using a Hodgkin-Huxley type formulation
# including activation (m), slow and fast components of inactivation (h) and
# recovery from inactivation (j). The slow component of inactivation and
# recovery from inactivation have an alternative formulation for CaMKII-
# phosphorylated channels.
#
[ina]
use membrane.V
#tm  = 1 / (6.765 * exp((V + 11.64) / 34.77) + 8.552 * exp(-(V + 77.42) / 5.955))
tm = if( V < -72.53, 0.2, if(V > -22.37, 0.2, (1 / (6.765 * exp((V + 11.64) / 34.77) + 8.552 * exp(-(V + 77.42) / 5.955)))))
    desc: Time constant for m-gate
    in [ms]
sm  = 1 / (1 + exp((V + 39.57 - (if(extra.passini == 1, 9.4, 0))) / -9.871))
    desc: Steady state value for m-gate
dot(m) = (sm - m) / tm
    desc: Activation gate for INa channels
sh  = 1 / (1 + exp((V + (if(extra.passini == 1, 78.5, 82.90)) - (if(extra.passini == 1, 9.4, 0))) / (if(extra.passini == 1, 6.22, 6.086))))
    desc: Steady-state value for h-gate
#thf = 1 / (1.432e-5 * exp((V + 1.196) / -6.285) + 6.1490 * exp((V + 0.5096) / 20.27))
thf = if(V < -85.5, 0.1, if(V > 9.03, 0.1, (1 / (1.432e-5 * exp((V + 1.196) / -6.285) + 6.1490 * exp((V + 0.5096) / 20.27)))))    
    desc: Time constant for fast development of inactivation in INa
    in [ms]
ths = 1 / (0.009794 * exp((V + 17.95) / -28.05) + 0.3343 * exp((V + 5.7300) / 56.66))
    desc: Time constant for slow development of inactivation in INa
    in [ms]
Ahf = 0.99 : Fraction of INa channels with fast inactivation
Ahs = 1.0 - Ahf : Fraction of INa channels with slow inactivation
dot(hf) = (sh - hf) / thf
    desc: Fast componennt of the inactivation gate for INa channels
dot(hs) = (sh - hs) / ths
    desc: Slow componennt of the inactivation gate for non-phosphorylated INa channels
h = Ahf * hf + Ahs * hs
    desc: Inactivation gate for INa
tj = 2.038 + 1 / (0.02136 * exp((V + 100.6) / -8.281) + 0.3052 * exp((V + 0.9941) / 38.45))
    desc: Time constant for j-gate in INa
    in [ms]
sj = sh
    desc: Steady-state value for j-gate in INa
dot(j) = (sj - j) / tj
    desc: Recovery from inactivation gate for non-phosphorylated INa channels
# Phosphorylated channels
thsp = 3 * ths
    desc: Time constant for h-gate of phosphorylated INa channels
    in [ms]
shsp = 1 / (1 + exp((V + 89.1) / 6.086))
    desc: Steady-state value for h-gate of phosphorylated INa channels
dot(hsp) = (shsp - hsp) / thsp
    desc: Slow componennt of the inactivation gate for phosphorylated INa channels
hp = Ahf * hf + Ahs * hsp
    desc: Inactivation gate for phosphorylated INa channels
tjp = 1.46 * tj
    desc: Time constant for the j-gate of phosphorylated INa channels
    in [ms]
dot(jp) = (sj - jp) / tjp
    desc: Recovery from inactivation gate for phosphorylated INa channels
# Current
GNa = 75 : Maximum conductance of INa channels
INa = (1.0 - parameters.INa_Block) * Na_factor * GNa * (V - nernst.ENa) * m^3 * ((1 - camk.f) * h * j + camk.f * hp * jp) * if(hff.HCM == 0, 1, hff.f_ina)
    in [uA/uF]
    desc: Fast sodium current
Na_factor = 1 #########################

########################################################
[I_Na_Markov]
# this state dependence of Na channel was from Moreno et al 2011 (Sci. Transl. Med)
# contains free, charged, neutral drug

class1_drug_cat = 3
Lidocaine_fact = if(class1_drug_cat==2 and new_drug_mode==0, 1, 0) ## example for Ib
Flecainide_fact = if(class1_drug_cat==3 and new_drug_mode==0, 1, 0) ## example for Ic
Vernakalant_fact = if(class1_drug_cat==4 and new_drug_mode==0, 1, 0) 

x1 = 0.17525003658089205 #0.14797754347520964
x2 = 0.22769707251646487 #0.44329767645261819
x3 = 1.5878245331432321 #1.2619515051982835
x4 = 1.2576743737216121 #0.81612832223508169
x5 = 0.52543627944390758 #0.4806549826026596
x6 = 6.4252235670648936 #5.1600928936348858
x7 = 5.772745111470801 #5.1479207231492587
x8 = 0.083768058697634151 #0.49942610975183799
x9 = 1.0420757013875899 #1.2911990715479282
x10 = 0.13109082900717084 #0.16988637722266764
x11 = 0.64837878986154296 #0.65437382417878975
x12 = 4.2470613286235501 #2.1094005733721017
x13 = 2.4681106986966874 #1.635016093952312
x14 = 1.8728968064753797 #1.1326739869028701
x15 = 0.36609260409620292 #0.37220423604162667
x16 = 1.4184477396508779 #1.1085979473831644
x17 = 1.0975885558701668 #1.0954771018692968
x18 = 24.237525064146595 #13.87052465
x19 = 0.10474652984188093 #0.1427803115716379
x20 = 2.7763335119302202 #2.9984195884274856
x21 = 1.1471679049419792 #1.0982410413216876
x22 = 1.4765731274911147 #1.6957722158406794
x23 = 0.73322959858277947 #0.746502882824724
x24 = 0.90208789393028344 #0.9003401199788899
x25 = 0.9538628242793874 #0.9655515103960528

f1 = 0.42819420585770152 #15802.517082265076
f2 = 1.0966992375628584 #11212.49445307003
f3 = 0.95292472590396304 #1.0835911457972944
f4 = 1.0386690325403958 #4.7213138217409707
f5 = 1.0625203465953317 #1.1886854610200599
f6 = 0.92838936607675882 #1.1293915676022106
f7 = 1.0731824427218379 #0.98647121091698153
f8 = 1.1404027252491513 #0.54542349779755606
f9 = 1.0349071997878894 #1.020713680006784
f10 = 12.567338406677543 #2.6609951303941308
f11 = 0.99880699016806052 #1.1411905523331658
f12 = 1.1346440569813225 #5.3540204782968566
f13 = 0.91660914207111688 #1.028853996176295
f14 = 0.96297816862953933 #1.0033797797467918

l1 = 1.36922845112808845e+04
l2 = 1.36922845112808845e+04
l3 = 9.75801811222358206e-01
l4 = 4.78855031291120348e+00
l5 = 9.75801811222358206e-01
l6 = 9.78288593348167645e-01
l7 = 9.78288593348167645e-01
l8 = 9.05788719283946997e-01
l9 = 9.05788719283946997e-01
l10 = 4.84105307990853273e+00

v1 = 23078.422328881032 #15606.948723172163
v2 = 15575.826496768859 #12551.877309328909
v3 = 1.0682868012004341 #0.79392152842322983
v4 = 3.6059581430428089 #4.5916282858963591
v5 = 273.39435779409871 #906.26022447936225
v6 = 1.1693494984610053 #0.66085359629267004
v7 = 1.3036709352536562 #1.1264666748197427
v8 = 1.0932271074309714 #0.91070862959432486
v9 = 0.013001074650111223 #1.5351508777975029
v10 = 3.8138320092427929 #4.4673101802187247
v11 = 0
v12 = 0
v13 = 0
v14 = 0

#### new drug components ####
new_drug_mode = 0
n_diffusion = 0
n_kd_open = 0
n_k_off = 0
n_ki_off = 0
n_kc_off = 0
n_p22 = 0
n_p23 = 0
n_p24 = 0
n_p25 = 0
n_p26 = 0
n_p27 = 0
n_p28 = 0
n_p29 = 0
n_p30 = 0
n_p31 = 0
n_p32 = 0
n_p33 = 0
n_p34 = 0
n_p35 = 0

diffusion = ((new_drug_mode*n_diffusion) + (Flecainide_fact*5500) + (Lidocaine_fact*500) + (Vernakalant_fact*500*0.3336352864588874)) #in [1 / M ms]
kd_open = ((new_drug_mode*n_kd_open) + (Flecainide_fact*11.2e-6) + (Lidocaine_fact*318e-6) + (Vernakalant_fact*318e-6*1.1136901875105627)) * exp(-0.7 * membrane.V * phys.FRT)
conc = 0
pH = 7.4
pKa_newdrug = 7.4
pKa_Lidocaine = 7.6
pKa_Flecainide = 9.3
pKa_Vernakalant = 5.4
#pH = (if(Lidocaine_fact==1, pH_Lidocaine, 0)) + (if(Flecainide_fact==1, pH_Flecainide, 0)) + (if(new_drug_mode==1, pH_newdrug, 0))
pKa = (if(Vernakalant_fact==1, pKa_Vernakalant, 0)) + (if(Lidocaine_fact==1, pKa_Lidocaine, 0)) + (if(Flecainide_fact==1, pKa_Flecainide, 0)) + (if(new_drug_mode==1, pKa_newdrug, 0))
portion = 1/(1+10^(pH-pKa))
conc_dplus = portion * conc
conc_d = (1-portion) * conc

kon = conc_dplus * diffusion #if(conc_dplus>0.0001, conc_dplus * diffusion, 1e-8) #### for protonated drugs
kcon = kon
koff = kd_open * diffusion
kcoff = koff

k_on = conc_d * diffusion #if(conc_d>0.0001, , 1e-8) #### for neutral drugs
k_off = ((new_drug_mode*n_k_off) + (Flecainide_fact*400e-6) + (Lidocaine_fact*400e-6) + (Vernakalant_fact*400e-6*1.1453729221197682)) * diffusion
ki_on = k_on / 2
ki_off = ((new_drug_mode*n_ki_off) + (Flecainide_fact*5.4e-6) + (Lidocaine_fact*3.4e-6) + (Vernakalant_fact*3.4e-6*2.3528642685294949)) * diffusion
kc_on = k_on / 2
kc_off = ((new_drug_mode*n_kc_off) + (Flecainide_fact*800e-6) + (Lidocaine_fact*900e-6) + (Vernakalant_fact*900e-6*0.049210537456762959)) * diffusion

Tfactor = 1 / (3 ^ ((37 - (phys.T - 273)) / 10.0)) #0.19245

# Transition rates (ms-1)  
a11 = Tfactor * p1 / (p2 * exp(-(membrane.V - actshift) / p3) + p6 * exp(-(membrane.V - actshift) / p7))
a12 = Tfactor * p1 / (p2 * exp(-(membrane.V - actshift) / p4) + p6 * exp(-(membrane.V - actshift) / p7))
a13 = Tfactor * p1 / (p2 * exp(-(membrane.V - actshift) / p5) + p6 * exp(-(membrane.V - actshift) / p7))
b11 = Tfactor * p8 * exp(-(membrane.V - actshift) / p9)
b12 = Tfactor * p10 * exp(-(membrane.V - actshift - p11) / p9)
b13 = Tfactor * p12 * exp(-(membrane.V - actshift - p13) / p9)
#a3 = p14 * exp(-membrane.V / p15)
#b3 = p16 * exp(membrane.V / p17)
#aa = a3 / (a3 + b3)
#tau = 1 / (a3 + b3)
a3_ss = 1/(1+exp((membrane.V - p14_new) / p15_new))
a3_tau = h1 + p01 * exp(p16_new * (membrane.V - p14_new)) / (1 + exp(p17_new * (membrane.V - p14_new)))
a3 = Tfactor * a3_ss / a3_tau
b3 = Tfactor * (1 - a3_ss) / a3_tau
a2 = Tfactor * p18 * exp(membrane.V / p19)
b2 = (a13*a2*a3) / (b13*b3)
ax = p20 * a2
bx = p21 * a3

a13c = p22 * a13
b13c = if(kon>0, (b13 * kcon * koff * a13c) / (kon * kcoff * a13), 0)
a13n = p23 * a13
b13n = if(k_on>0, (b13 * kc_on * a13n * k_off) / (kc_off * a13 * k_on), 0)
ax1 = p24 * ax
bx1 = p25 * bx
ax2 = p26 * ax
bx2 = if(ki_on>0, (bx * k_on * ax2 * ki_off) / (ax * ki_on * k_off), 0)
a22 = p27 * a2
a_22 = p28 * a2
b22 = if(b13c>0, (a13c * a22 * a33) / (b13c * b33), 0)
b_22 = if(b13n>0, (a_33 * a13n * a_22) / (b_33 * b13n), 0)
b33 = p29 * b3
b_33 = p30 * b3
a33 = p31 * a3
a_33 = if(ki_on>0, (ki_off * a3 * kc_on * b_33) / (ki_on * kc_off * b3), 0)
## DIT or DpIT ONLY in Flecainide (Inactivated, Trapped state)
a44 = p32 * a2
b44 = p33 * a3
a_44 = p34 * a2
b_44 = p35 * a2

actshift = -15*x19
h1 = 2*x20
p1 = 8.5539*x1
p2 = 7.4392e-2*x2
p3 = 17.0*x3
p4 = 15.0*x4
p5 = 12.0*x5
p6 = 2.0373e-1*x6
p7 = 150*x7
p8 = 7.5215e-2*x8
p9 = 20.3*x9
p10 = 2.7574*x10
p11 = 5*x11
p12 = 4.7755e-1*x12
p13 = 10*x13
p14 = 5.1458e-6 #5.1458e-6 *1.0325463712122342
p15 = 8.2471 #0.8*8.2471 * 0.10401603829601243
p16 = 6.1205 #6.1205 * 0.96668483687506801
p17 = 12.542 #0.8*12.542 * 1.0908872227689068
p18 = 13.370*x14
p19 = 43.749*x15
p20 = 3.4229e-2*x16
p21 = 1.7898e-2*x17
p14_new = -70*x21
p15_new = 3.5*x22
p16_new = 0.052 * 2.9*x23
p17_new = 0.132 * 1.9*x24
p01 = 41*x25

p22 = (new_drug_mode*n_p22) + (Flecainide_fact*3.6324e-3*f1) + (Lidocaine_fact*5.6974e-03*l1) + (Vernakalant_fact*5.6974e-03*v1) #3.6324e-3
p23 = (new_drug_mode*n_p23) + (Flecainide_fact*2.6452*f2) + (Lidocaine_fact*8.4559e+01*l2) + (Vernakalant_fact*8.4559e+01*v2) #2.6452
p24 = (new_drug_mode*n_p24) + (Flecainide_fact*5.7831e-5*f3) + (Lidocaine_fact*6.3992e-07*l3) + (Vernakalant_fact*6.3992e-07*v3) #5.7831e-5
p25 = (new_drug_mode*n_p25) + (Flecainide_fact*1.6689e-8*f4) + (Lidocaine_fact*1.3511e+00*l4) + (Vernakalant_fact*1.3511e+00*v4) #1.6689e-8
p26 = (new_drug_mode*n_p26) + (Flecainide_fact*2.6126e-01*f5) + (Lidocaine_fact*1.3110e-01*l5) + (Vernakalant_fact*1.3110e-01*v5) #2.6126e-01
p27 = (new_drug_mode*n_p27) + (Flecainide_fact*1.4847e3*f6) + (Lidocaine_fact*6.7067e-06*l6) + (Vernakalant_fact*6.7067e-06*v6) #1.4847e3
p28 = (new_drug_mode*n_p28) + (Flecainide_fact*4.2385e+01*f7) + (Lidocaine_fact*1.7084e-05*l7) + (Vernakalant_fact*1.7084e-05*v7) #4.2385e+01
p29 = (new_drug_mode*n_p29) + (Flecainide_fact*1.7352e-6*f8) + (Lidocaine_fact*1.9698e-05*l8) + (Vernakalant_fact*1.9698e-05*v8) #1.7352e-6
p30 = (new_drug_mode*n_p30) + (Flecainide_fact*2.1181e+00*f9) + (Lidocaine_fact*4.8477*l9) + (Vernakalant_fact*4.8477*v9) #2.1181e+00
p31 = (new_drug_mode*n_p31) + (Flecainide_fact*6.7505e-05*f10) + (Lidocaine_fact*3.2976*l10) + (Vernakalant_fact*3.2976*v10) #6.7505e-05
p32 = (new_drug_mode*n_p32) + (Flecainide_fact*2.4135*f11) + (Lidocaine_fact*0) + (Vernakalant_fact*2.4135*v11)
p33 = (new_drug_mode*n_p33) + (Flecainide_fact*4.9001e-2*f12) + (Lidocaine_fact*0) + (Vernakalant_fact*4.9001e-2*v12) 
p34 = (new_drug_mode*n_p34) + (Flecainide_fact*1.0326e-03*f13) + (Lidocaine_fact*0) + (Vernakalant_fact*1.0326e-03*v13) 
p35 = (new_drug_mode*n_p35) + (Flecainide_fact*2.1378e-02*f14) + (Lidocaine_fact*0) + (Vernakalant_fact*2.1378e-02*v14)

dot(IC3) = -IC3 * (a11 + a3 + ki_on) + IC2 * b11 + C3 * b3 + ki_off * DIC3
dot(IC2) = -IC2 * (b11 + a3 + a12 + ki_on) + IC3 * a11 + IF * b12 + C2 * b3 + ki_off * DIC2
dot(IF) = -IF * (b12 + a3 + b2 + ki_on) + IC2 * a12 + C1 * b3 + O * a2 + ki_off * DIF
dot(C3) = -C3 * (b3 + a11 + kcon + kc_on) + IC3 * a3 + C2 * b11 + DpC3 * kcoff + DC3 * kc_off
dot(C2) = -C2 * (b11 + b3 + a12 + kcon + kc_on) + C3 * a11 + IC2 * a3 + C1 * b12 + DpC2 * kcoff + DC2 * kc_off
dot(C1) = -C1 * (b12 + b3 + a13 + kcon + kc_on) + C2 * a12 + IF * a3 + O * b13 + DpC1 * kcoff + DC1 * kc_off
dot(O) = -O * (b13 + a2 + ax + kon + k_on) + C1 * a13 + IF * b2 + IS * bx + DpO * koff + DO * k_off
dot(IS) = -IS * (bx + ki_on) + O * ax + DIS * ki_off

dot(DpIC3) = -DpIC3 * (a33 + a11) + DpIC2 * b11 + DpC3 * b33
dot(DpIC2) = -DpIC2 * (b11 + a33 + a12) + DpIC3 * a11 + DpIF * b12 + DpC2 * b33
dot(DpIF) = -DpIF * (b12 + a33 + b22 + a44) + DpIC2 * a12 + DpC1 * b33 + DpO * a22 + DpIT * b44
dot(DpC3) = -DpC3 * (b33 + a11 + kcoff) + DpIC3 * a33 + DpC2 * b11 + C3 * kcon
dot(DpC2) = -DpC2 * (b11 + b33 + a12 + kcoff) + DpC3 * a11 + DpIC2 * a33 + DpC1 * b12 + C2 * kcon
dot(DpC1) = -DpC1 * (b12 + b33 + a13c + kcoff) + DpC2 * a12 + DpIF * a33 + DpO * b13c + C1 * kcon
dot(DpO) = -DpO * (b13c + a22 + ax1 + koff) + DpC1 * a13c + DpIF * b22 + DpIS * bx1 + O * kon
dot(DpIS) = -DpIS * (bx1) + DpO * ax1
dot(DpIT) = -DpIT * b44 + DpIF * a44

dot(DIC3) = -DIC3 * (a_33 + a11 + ki_off) + DIC2 * b11 + DC3 * b_33 + ki_on * IC3
dot(DIC2) = -DIC2 * (b11 + a_33 + a12 + ki_off) + DIC3 * a11 + DIF * b12 + DC2 * b_33 + ki_on * IC2
dot(DIF) = -DIF * (b12 + a_33 + b_22 + a_44 + ki_off) + DIC2 * a12 + DC1 * b_33 + DO * a_22 + DIT * b_44 + ki_on * IF
dot(DC3) = -DC3 * (b_33 + a11 + kc_off) + DIC3 * a_33 + DC2 * b11 + C3 * kc_on
dot(DC2) = -DC2 * (b11 + b_33 + a12 + kc_off) + DC3 * a11 + DIC2 * a_33 + DC1 * b12 + C2 * kc_on
dot(DC1) = -DC1 * (b12 + b_33 + a13n + kc_off) + DC2 * a12 + DIF * a_33 + DO * b13n + C1 * kc_on
dot(DO) = -DO * (b13n + a_22 + ax2 + k_off) + DC1 * a13n + DIF * b_22 + DIS * bx2 + O * k_on
dot(DIS) = -DIS * (bx2 + ki_off) + DO * ax2 + IS * ki_on
dot(DIT) = -DIT * b_44 + DIF * a_44

#E_Na = (phys.RTF) * log(138/10)
g_Na = x18*7.8 *1.0 *4.5 #7.8 *1.0 *4.5#*7.85 #* 144.5
    in [1/ms]
I_Na_tot = (1 - parameters.INa_Block) * g_Na * O * (membrane.V - nernst.ENa) * if(hff.HCM == 0, 1, hff.f_ina)
    in [pA]

########################################################

#
# INaL :: Late component of the Sodium current
# Page 7
#
[inal]
use membrane.V
use ina.tm
sm = 1 / (1 + exp((V + 42.85 - (if(extra.passini == 1, 9.4, 0))) / -5.264))
    desc: Steady state value of m-gate for INaL
dot(m) = (sm - m) / tm
    desc: Activation gate for INaL
th = 200.0 [ms] : Time constant for inactivation of non-phosphorylated INaL channels
sh = 1 / (1 + exp((V + 87.61 - (if(extra.passini == 1, 9.4, 0))) / 7.488))
    desc: Steady-state value for inactivation of non-phosphorylated INaL channels
dot(h) = (sh - h) / th
    desc: Inactivation gate for non-phosphorylated INaL channels
thp = 3 * th
    in [ms]
    desc: Time constant for inactivation of phosphorylated INaL channels
shp = 1 / (1 + exp((V + 93.81) / 7.488))
    desc: Steady state value for inactivation of phosphorylated INaL channels
dot(hp) = (shp - hp) / thp
    desc: Inactivation gate for phosphorylated INaL channels
# Current
GNaL = 0.0075 : Maximum conductance of INaL
f_gnal = if(cell.mode == 1, 0.6, 1)
    desc: Adjustment for different cell types
INaL = (1.0 - parameters.INaL_Block) * inal_factor * f_gnal * GNaL * (V - nernst.ENa) * m * ((1 - camk.f) * h + camk.f * hp) * if(hff.HCM == 0, 1, hff.f_inal)
inal_factor = 1 #################

#
# Ito :: Transient outward Potassium current
# page 8
#
[ito]
use membrane.V
ta = 1.0515 / (one + two)
    one = 1 / (1.2089 * (1 + exp((V - 18.4099) / -29.3814)))
    two = 3.5 / (1 + exp((V + 100) / 29.3814))
    desc: Time constant for Ito activation
    in [ms]
sa = 1 / (1 + exp((V - 14.34) / -14.82))
    desc: Steady-state value for Ito activation
dot(a) = (sa - a) / ta
    desc: Ito activation gate
si = 1 / (1 + exp((V + 43.94) / 5.711))
    desc: Steady-state value for Ito inactivation
delta_epi = if(cell.mode == 1,
    1 - (0.95 / (1 + exp((V + 70) / 5))),
    1)
    desc: Adjustment for different cell types
tif = (4.562 + 1 / (0.3933 * exp((V+100) / -100) + 0.08004 * exp((V + 50) / 16.59))) * delta_epi
    desc: Time constant for fast component of Ito inactivation
    in [ms]
tis = (23.62 + 1 / (0.001416 * exp((V + 96.52) / -59.05)+ 1.780e-8 * exp((V + 114.1) / 8.079))) * delta_epi
    desc: Time constant for slow component of Ito inactivation
    in [ms]
dot(if) = (si - if) / tif
    desc: Fast component of Ito activation
dot(is) = (si - is) / tis
    desc: Slow component of Ito activation
Aif = 1 / (1 + exp((V - 213.6) / 151.2))
    desc: Fraction of fast inactivating Ito channels
Ais = 1 - Aif
    desc: Fraction of slow inactivating Ito channels
i = Aif * if + Ais * is
    desc: Inactivation gate for non-phosphorylated Ito
dot(ap) = (assp - ap) / ta
    assp=1.0/(1.0+exp((-(V-24.34))/14.82))
dti_develop = 1.354 + 1e-4 / (exp((V - 167.4) / 15.89) + exp((V - 12.23) / -0.2154))
dti_recover = 1 - 0.5 / (1 + exp((V+70) / 20))
tifp = dti_develop * dti_recover * tif
    desc: Time constant for fast component of inactivation of phosphorylated Ito channels
    in [ms]
tisp = dti_develop * dti_recover * tis
    desc: Time constant for slot component of inactivation of phosphorylated Ito channels
    in [ms]
dot(ifp) = (si - ifp) / tifp
    desc: Fast component of inactivation of phosphorylated Ito channels
dot(isp) = (si - isp) / tisp
    desc: Slow component of inactivation of phosphorylated Ito channels
ip = Aif * ifp + Ais * isp
    desc: Inactivation gate for phosphorylated Ito channels
# Current
Gto = (if(cell.mode == 0, 0.02, 0.08)) * (if(extra.passini == 1, 2.5, 1)) # Passini modification
    desc: Maximum conductance of Ito channels
Ito = (1.0 - parameters.Ito_Block) * (Gto * (V - nernst.EK) * ((1 - camk.f) * a * i + camk.f * ap * ip)  *if(hff.HCM == 0, 1, hff.f_ito))
    desc: Transient outward Potassium current

#
# ICaL  :: L-type Calcium current
# ICaNa :: Sodium current through the L-type Calcium channel
# ICaK  :: Potassium current through the L-type Calcium channel
# Page 9
#
# The ICaL channel is modeled using activation, inactivation (fast and slow),
# Ca-dependent inactivation (fast and slow) and recovery from Ca-dependent
# inactivation.
# Inactivation and Ca-dependent inactivation have an alternative formulation
# for CaMKII phosphorylated channels.
#
#
[ical]
use membrane.V
#vf = V * phys.FRT
vf = if(abs(V) < 1e-5, 0.038, (V * phys.FRT))
vff = V * phys.FFRT
# Activation
sd = 1 / (1 + exp((V + 3.94) / -4.23))
    desc: Steady-state value for activation gate of ICaL channel
td = 0.6 + 1 / (exp(-0.05 * (V + 6)) + exp(0.09 * (V + 14)))
    desc: Time constant for activation gate of ICaL channel
    in [ms]
dot(d) = (sd - d) / td
    desc: Activation gate of ICaL channel
# Inactivation
sf = 1 / (1 + exp((V + 19.58) / 3.696))
    desc: Steady-state value for inactivation gate of ICaL channel
tff = (7 + 1 / (0.0045 * exp((V + 20) / -10) + 0.0045 * exp((V + 20) / 10))) * if(hff.HCM == 0, 1, hff.t_ical_fast)
    desc: Time constant for fast inactivation of ICaL channels
    in [ms]
tfs = (1000 + 1 / (0.000035 * exp((V + 5) / -4) + 0.000035 * exp((V + 5) / 6))) * if(hff.HCM == 0, 1, hff.t_ical_slow)
    desc: Time constant for slow inactivation of ICaL channels
    in [ms]
dot(ff) = (sf - ff) / tff
    desc: Fast inactivation of ICaL channels
dot(fs) = (sf - fs) / tfs
    desc: Slow inactivation of ICaL channels
Aff = 0.6 : Fraction of ICaL channels with fast inactivation
Afs = 1 - Aff : Fraction of ICaL channels with slow inactivation
f = Aff * ff + Afs * fs
    desc: Inactivation of ICaL channels
# Ca-dependent inactivation
sfca = sf
    desc: Steady-state value for Ca-dependent inactivation of ICaL channels
tfcaf = 7 + 1 / (0.04 * exp((V - 4) / -7) + 0.04 * exp((V - 4) / 7))
    desc: Time constant for fast Ca-dependent inactivation of ICaL channels
    in [ms]
tfcas = 100 + 1 / (0.00012 * exp(V / -3) + 0.00012 * exp(V / 7))
    desc: Time constant for slow Ca-dependent inactivation of ICaL channels
    in [ms]
Afcaf = 0.3 + 0.6 / (1 + exp((V - 10) / 10))
    desc: Fraction of ICaL channels with fast Ca-dependent inactivation
Afcas = 1 - Afcaf
    desc: Fraction of ICaL channels with slow Ca-dependent inactivation
dot(fcaf) = (sfca - fcaf) / tfcaf
    desc: Fast Ca-dependent inactivation of ICaL channels
dot(fcas) = (sfca - fcas) / tfcas
    desc: Slow Ca-dependent inactivation of ICaL channels
fca = Afcaf * fcaf + Afcas * fcas
    desc: Ca-dependent inactivation of ICaL channels
# Recovery from Ca-dependent inactivation
tjca = 75 [ms] : Time constant of recovery from Ca-dependent inactivation
dot(jca) = (sfca - jca) / tjca
    desc: Recovery from Ca-dependent inactivation
# Inactivation of phosphorylated channels
tffp = 2.5 * tff
    in [ms]
    desc: Time constant for fast inactivation of phosphorylated ICaL channels
dot(ffp) = (sf - ffp) / tffp
    desc: Fast inactivation of phosphorylated ICaL channels
fp = Aff * ffp + Afs * fs
    desc: Inactivation of phosphorylated ICaL channels
# Ca-dependent inactivation of phosphorylated channels
tfcafp = 2.5 * tfcaf
    in [ms]
    desc: Time constant for fast Ca-dependent inactivation of phosphorylated ICaL channels
dot(fcafp) = (sfca - fcafp) / tfcafp
    desc: Fast Ca-dependent inactivation of phosphorylated ICaL channels
fcap = Afcaf * fcafp + Afcas * fcas
    desc: Ca-dependent inactivation of phosphorylated ICaL channels
# Fraction of channels in Ca-depdent inactivation mode
dot(nca) = anca * k2n - nca*km2n
    anca = 1 / (k2n / km2n + (1 + Kmn / calcium.Ca_ss)^4.0)
    Kmn = 0.002
    k2n = 1000
    km2n = jca * 1.0
    desc: Fraction of channels in Ca-depdent inactivation mode
# Total currents through ICaL channel
PhiCaL  = 4 * vff *(       calcium.Ca_ss  * exp(2 * vf) - 0.341 * extra.Cao) / (exp(2 * vf) - 1)
PhiCaNa = 1 * vff *(0.75 * sodium.Na_ss   * exp(1 * vf) - 0.75  * extra.Nao) / (exp(1 * vf) - 1)
PhiCaK  = 1 * vff *(0.75 * potassium.K_ss * exp(1 * vf) - 0.75  * extra.Ko ) / (exp(1 * vf) - 1)
PCa = piecewise(cell.mode == 0, base, cell.mode == 1, 1.2*base, 2.5*base)
    base = 0.0001
PCap   = 1.1      * PCa
PCaNa  = 0.00125  * PCa
PCaK   = 3.574e-4 * PCa
PCaNap = 0.00125  * PCap
PCaKp  = 3.574e-4 * PCap
g  = d * (f  * (1 - nca) + jca * fca  * nca)
    desc: Conductivity of non-phosphorylated ICaL channels
gp = d * (fp * (1 - nca) + jca * fcap * nca)
    desc: Conductivity of phosphorylated ICaL channels
ICaL   = (1.0 - parameters.ICaL_Block) * (calf*((1 - camk.f) * PCa   * PhiCaL  * g + camk.f * PCap   * PhiCaL  * gp) * if(hff.HCM == 0, 1, hff.f_ical))
    desc: L-type Calcium current
    in [uA/uF]
ICaNa  = (1.0 - parameters.ICaL_Block) * ((1 - camk.f) * PCaNa * PhiCaNa * g + camk.f * PCaNap * PhiCaNa * gp)
    desc: Sodium current through ICaL channels
    in [uA/uF]
ICaK   = (1.0 - parameters.ICaL_Block) * ((1 - camk.f) * PCaK  * PhiCaK  * g + camk.f * PCaKp  * PhiCaK  * gp)
    desc: Potassium current through ICaL channels
    in [uA/uF]
calf = 1 ##################

#
# IKr :: Rapid delayed rectifier Potassium current
# Page 11
#
# Modelled with activation (fast and slow) and an instantaneous inactivation.
#
[ikr]
use membrane.V
# Activation
sx = 1 / (1 + exp((V + 8.337) / -6.789))
    desc: Steady-state value for IKr activation
txf = 12.98 + 1 / (0.36520 * exp((V - 31.66) / 3.869) + 4.123e-5 * exp((V - 47.78) / -20.38))
    desc: Time constant for fast IKr activation
txs = 1.865 + 1 / (0.06629 * exp((V - 34.70) / 7.355) + 1.128e-5 * exp((V - 29.74) / -25.94))
    desc: Time constant for slow IKr activation
dot(xf) = (sx - xf) / txf
    desc: Fast activation of IKr channels
dot(xs) = (sx - xs) / txs
    desc: Slow activation of IKr channels
Axf = 1 / (1 + exp((V + 54.81) / 38.21))
    desc: Fraction of IKr channels with fast activation
Axs = 1 - Axf
    desc: Fraction of IKr channels with slow activation
x = Axf * xf + Axs * xs
    desc: Activation of IKr channels
# Inactivation
r = 1 / (1 + exp((V + 55) / 75)) * 1 / (1 + exp((V - 10) / 30))
    desc: Inactivation of IKr channels
# Current
GKr = piecewise(cell.mode == 0, base, cell.mode == 1, 1.3 * base, 0.8 * base)
    base = 0.046
    desc: Maximum conductance of IKr channels
IKr = (1.0 - parameters.IKr_Block) * (GKr * sqrt(extra.Ko / 5.4) * x * r * (V - nernst.EK) * ikr_factor * if(hff.HCM == 0, 1, hff.f_ikr))
    desc: Rapid delayed Potassium current
    in [uA/uF]
ikr_factor = 1 #####

#
# IKs :: Slow delayed rectifier Potassium current
# Page 11
#
# Modelled with two activation channels
#
[iks]

useNewIKsModel = 0 ##########
theta = 0 # degree of mutation where 0 = WT, 1 = Homozygote mutation (MT)

use membrane.V
sx  = 1 / (1 + exp((V + 11.60) / -8.932))
    desc: Steady-state value for activation of IKs channels
tx1 = 817.3 + 1 / (2.326e-4 * exp((V + 48.28) / 17.80) + 0.001292 * exp((V + 210) / -230))
    desc: Time constant for slow, low voltage IKs activation
dot(x1) = (sx - x1) / tx1
    desc: Slow, low voltage IKs activation
tx2 = 1 / (0.01 * exp((V - 50) / 20) + 0.0193 * exp((V + 66.54) / -31))
    desc: Time constant for fast, high voltage IKs activation
dot(x2) = (sx - x2) / tx2
    desc: Fast, high voltage IKs activation
KsCa_ori = 1 + 0.6 / (1.0 + (3.8e-5 / calcium.Cai)^1.4)
KsCa = if(calcium.Cai <= 2e-4, 1.54644, KsCa_ori)
    desc: Maximum conductance for IKs
GKs = if(cell.mode == 1, 1.4 * base, base)
    base = 0.0034
    desc: Conductivity adjustment for cell type
IKs_orig = (1.0 - parameters.IKs_Block) * iks_factor * GKs * KsCa * x1 * x2 * (V - nernst.EKs) * if(hff.HCM ==0, 1, hff.f_iks) #
    desc: Slow delayed rectifier Potassium current
iks_factor = 1 ####################
IKs_orig_GoF_S140G = IKs_orig + (theta * GKs * (V - nernst.EKs))

# new iks model code goes here ###########################################################################################
# PKA-dependent IKs phosphoregulation 
IKs_PKAp = 0.1098 #0.8380 in 100 nM ISO (IKsp/IKstot)
fracPKA_Ikso = 0.1098 # Derived quantity (IKs_PKAp(baseline)/Ikrtot)
fracPKA_Iksiso = 0.8380 # Derived quantity (IKs_PKAp(ISO)/Ikrtot)
kPKA_Iks = (IKs_PKAp-fracPKA_Ikso)/(fracPKA_Iksiso-fracPKA_Ikso)

#NEW IKS - 2016 (Bartos, Grandi et al, 2017)
#PKA-dependent IKs phosphoregulation
gks_factor = if(extra.passini == 1, 0.0475, 0.049) #** #0.05 #0.0325
Fjunc = 0.11
Fsl = 1-Fjunc
Ca_observed_ss = if(extra.KChannelCaLevel_Ks > 0, extra.KChannelCaLevel_Ks, calcium.Ca_ss)
Ca_observed_i = if(extra.KChannelCaLevel_Ks > 0, extra.KChannelCaLevel_Ks, calcium.Cai)

#**
P_g_0 = gks_factor*(0.2+0.2*kPKA_Iks) # 0.2->0.4 w/ ISO 0.2+0.2
P_g_max = gks_factor*(0.8+0.5*kPKA_Iks)# 0.8->1.3 w/ ISO 0.8+0.5
P_vh_0 = 10-1-10*kPKA_Iks # -1->-11 w/ ISO
P_vh_max = 10-12-9*kPKA_Iks # -12->-21 w/ ISO -6-5
P_tau_0 = 26+9*kPKA_Iks # 160->260 w/ ISO
P_tau_max = 40+4*kPKA_Iks # 300->370 w/ ISO

caks_junc = 0.000190215422174489 #y(36); 
caks_sl = 0.000110995597092751 #y(37) # normal simulation
    
gks_junc = P_g_0 + (P_g_max-P_g_0)/(1 + (150e-6/Ca_observed_ss)^1.3) 
    # Regulated by PKA
gks_sl = P_g_0 + (P_g_max-P_g_0)/(1 + (150e-6/Ca_observed_i)^1.3) 
    # Regulated by PKA
    
VsXs_Ca_junc = P_vh_0 + (P_vh_max-P_vh_0)/(1 + (350e-6/Ca_observed_ss)^4) 
    # Regulated by PKA
xsss_junc = 1/(1+exp(-(V - VsXs_Ca_junc)/15))
VsTs_Ca_junc = P_tau_0 + (P_tau_max-P_tau_0)/(1 + (150e-6/Ca_observed_ss)^3) 
    # Regulated by PKA
tauxs_junc = 2*((100+350*exp(-((V +30)^2)/4000))*1/(1+exp(-(V + VsTs_Ca_junc)/10)))

VsXs_Ca_sl = P_vh_0 + (P_vh_max-P_vh_0)/(1 + (350e-6/Ca_observed_i)^4) 
    # Regulated by PKA
xsss_sl = 1/(1+exp(-(V -VsXs_Ca_sl)/15))
VsTs_Ca_sl = P_tau_0 + (P_tau_max-P_tau_0)/(1 + (150e-6/Ca_observed_i)^3) 
    # Regulated by PKA
tauxs_sl = 2*((100+350*exp(-((V+30)^2)/4000))*1/(1+exp(-(V + VsTs_Ca_sl)/10))) 

dot(x_jun) = (xsss_junc - x_jun)/tauxs_junc

dot(x_sl) = (xsss_sl - x_sl)/tauxs_sl

I_ks_junc = Fjunc * gks_junc * x_jun^2 * (V - nernst.EKs) *if(hff.HCM ==0, 1, hff.f_iks) #eks = (1/FoRT)*log((extra.Ko+nernst.PNaK*extra.Nao)/(y35+nernst.PNaK*y34))
    #FoRT = phys.F / phys.R / phys.T
I_ks_sl = Fsl * gks_sl * x_sl^2 * (V - nernst.EKs) *if(hff.HCM ==0, 1, hff.f_iks)

I_ks_new = I_ks_junc+I_ks_sl
I_ks_new_GoF_S140G = (I_ks_junc + (theta * gks_junc * (V - nernst.EKs)) +(I_ks_sl +(theta * gks_sl * (V - nernst.EKs))))

IKs = if(useNewIKsModel == 1, I_ks_new, IKs_orig)
IKs_mut = if(useNewIKsModel == 1, I_ks_new_GoF_S140G, IKs_orig_GoF_S140G)

###########################################################


#
# IK1 :: Inward rectifier Potassium current
# Page 12
#
# Modelled with an activation channel and an instantaneous inactivation channel
#
[ik1]
useIK1CalciumRegulation = 0
Ca_observed_K1 = if(extra.KChannelCaLevel_K1 > 0, extra.KChannelCaLevel_K1, calcium.Cai)

use membrane.V
sx = 1 / (1 + exp(-(V + 2.5538 * extra.Ko + 144.59 - (if(extra.passini == 1, 9.4, 0))) / (1.5692 * extra.Ko + 3.8115)))
    desc: Steady-state value for activation of IK1 channels
tx = 122.2 / (exp((V + 127.2) / -20.36) + exp((V + 236.8) / 69.33))
    desc: Time constant for activation of IK1 channels
dot(x) = (sx - x) / tx
    desc: Activation of IK1 channels
r_orig = 1 / (1 + exp((V + 105.8 - 2.6 * extra.Ko - (if(extra.passini == 1, 9.4, 0))) / 9.493))
r_nocalcium =  0.0002 + 0.6 / (1 + exp((V + 105.8 - 2.6 * extra.Ko - (if(extra.passini == 1, 9.4, 0))) / 9.493))
r_highcalcium = 0.0000001 + (if(extra.passini == 1, 1.16, 1.2425)) / (1 + exp((V + 105.8 - 2.6 * extra.Ko - (if(extra.passini == 1, 9.4, 0))) / 9.493))
Km = 1.75e-4
hill = 4
f_calcium = 1 / (1 + (Ca_observed_K1 / Km)^hill)
r = if(useIK1CalciumRegulation == 1, f_calcium * r_nocalcium + (1 - f_calcium) * r_highcalcium, r_orig)
    desc: Inactivation of IK1 channels
GK1 = piecewise(cell.mode == 0, base, cell.mode == 1, 1.2*base, 1.3*base)
    base = 0.1908
    desc: Conductivity of IK1 channels, cell-type dependent
IK1 = (1.0 - parameters.IK1_Block) * factor_ik1* (GK1 * sqrt(extra.Ko) * r * x * (V - nernst.EK)) * if(hff.HCM == 0, 1, hff.f_ik1)
    desc: Inward rectifier Potassium current
factor_ik1 = 1 #######################

Po = (f_calcium * r_nocalcium + (1 - f_calcium) * r_highcalcium) * sx

#
# ISK :: Based on Kennedy et al 2017, J physiol
#
[isk]
Ca_observed_SK = if(extra.KChannelCaLevel_SK > 0, extra.KChannelCaLevel_SK, calcium.Cai)
ec50 = 3e-4 ###  0.7 micromolar # In the original paper, they ranged ec50 from 0.1 to 1.0 micromol 
gsk = 4.31e-3 ### 0.8 mcS mcF-1 # in the original paper, they ranged from 0.4 to 4 micro
        desc: with ec50 0.7 and gsk 0.8, the model showed 12% difference on APD between the ISK and nonISK model (confirmed by the Hsieh et al experimental data)
#r = 1 / (1 + (Kd/calcium.Cai)^hill)
sx = ((Ca_observed_SK^1) / (Ca_observed_SK^1 + ec50^1)) # 0.81 * (calcium.Cai / (calcium.Cai + ec50))
tx = 1.0 / (0.047 * Ca_observed_SK + (1/76.0)) # 1.0 / (0.047 * calcium.Cai + (1/76.0))
dot(x) = (sx - x) / tx
ISK = (gsk * x * (membrane.V - nernst.EK)) * factor_isk
factor_isk = 1 #####################
#Kd = 1.25e-4
#hill = 5

#
# INaCa :: Sodium/Calcium exchange current
# page 12
#
[inaca]
use membrane.V
use extra.Nao, extra.Cao
use sodium.Nai, calcium.Cai
kna1   = 15.0
kna2   = 5.0
kna3   = 88.12
kasymm = 12.5
wna    = 6.0e4
wca    = 6.0e4
wnaca  = 5.0e3
kcaon  = 1.5e6
kcaoff = 5.0e3
qna    = 0.5224
qca    = 0.1670
hca    = exp(qca * V * phys.FRT)
hna    = exp(qna * V * phys.FRT)
# Parameters h
h1  = 1 + Nai / kna3 * (1 + hna)
h2  = (Nai * hna) / (kna3 * h1)
h3  = 1 / h1
h4  = 1 + Nai / kna1 * (1 + Nai / kna2)
h5  = Nai * Nai / (h4 * kna1 * kna2)
h6  = 1 / h4
h7  = 1 + Nao / kna3 * (1 + 1 / hna)
h8  = Nao / (kna3 * hna * h7)
h9  = 1 / h7
h10 = kasymm + 1 + Nao / kna1 * (1 + Nao / kna2)
h11 = Nao * Nao / (h10 * kna1 * kna2)
h12 = 1 / h10
# Parameters k
k1   = h12 * Cao * kcaon
k2   = kcaoff
k3p  = h9 * wca
k3pp = h8 * wnaca
k3   = k3p + k3pp
k4p  = h3 * wca / hca
k4pp = h2 * wnaca
k4   = k4p + k4pp
k5   = kcaoff
k6   = h6 * Cai * kcaon
k7   = h5 * h2 * wna
k8   = h8 * h11 * wna
x1 = k2 * k4 * (k7 + k6) + k5 * k7 * (k2 + k3)
x2 = k1 * k7 * (k4 + k5) + k4 * k6 * (k1 + k8)
x3 = k1 * k3 * (k7 + k6) + k8 * k6 * (k2 + k3)
x4 = k2 * k8 * (k4 + k5) + k3 * k5 * (k1 + k8)
E1 = x1 / (x1 + x2 + x3 + x4)
E2 = x2 / (x1 + x2 + x3 + x4)
E3 = x3 / (x1 + x2 + x3 + x4)
E4 = x4 / (x1 + x2 + x3 + x4)
KmCaAct = 150.0e-6
allo    = 1 / (1 + (KmCaAct / Cai)^2.0)
JncxNa  = 3 * (E4 * k7 - E1 * k8) + E3 * k4pp - E2 * k3pp
JncxCa  = E2 * k2 - E1 * k1
Gncx = piecewise(cell.mode == 0, base, cell.mode == 1, 1.1*base, 1.4*base)
    base = 0.0008
INaCa = (1.0 - parameters.INCX_Block) * (0.8 * Gncx * allo * (JncxNa + 2 * JncxCa)) *if(hff.HCM == 0, 1, hff.f_inaca)
    desc: Sodium/Calcium exchange current
    in [uA/uF]

#
# INaCa_ss :: Sodium/Calcium exchanger current into the L-type subspace
# Page 12
#
[inacass]
use membrane.V
use extra.Nao, extra.Cao
use sodium.Na_ss, calcium.Ca_ss
h1  = 1 + Na_ss / inaca.kna3 * (1 + inaca.hna)
h2  = (Na_ss * inaca.hna)/(inaca.kna3 * h1)
h3  = 1 / h1
h4  = 1 + Na_ss / inaca.kna1 * (1 + Na_ss / inaca.kna2)
h5  = Na_ss * Na_ss /(h4 * inaca.kna1 * inaca.kna2)
h6  = 1 / h4
h7  = 1 + Nao / inaca.kna3 * (1 + 1 / inaca.hna)
h8  = Nao / (inaca.kna3 * inaca.hna * h7)
h9  = 1/h7
h10 = inaca.kasymm + 1 + Nao / inaca.kna1 * (1 + Nao / inaca.kna2)
h11 = Nao * Nao / (h10 * inaca.kna1 * inaca.kna2)
h12 = 1/h10
k1   = h12 * Cao * inaca.kcaon
k2   = inaca.kcaoff
k3p  = h9 * inaca.wca
k3pp = h8 * inaca.wnaca
k3   = k3p + k3pp
k4p  = h3 * inaca.wca / inaca.hca
k4pp = h2 * inaca.wnaca
k4   = k4p + k4pp
k5   = inaca.kcaoff
k6   = h6 * Ca_ss * inaca.kcaon
k7   = h5 * h2 * inaca.wna
k8   = h8 * h11 * inaca.wna
x1 = k2 * k4 * (k7 + k6) + k5 * k7 * (k2 + k3)
x2 = k1 * k7 * (k4 + k5) + k4 * k6 * (k1 + k8)
x3 = k1 * k3 * (k7 + k6) + k8 * k6 * (k2 + k3)
x4 = k2 * k8 * (k4 + k5) + k3 * k5 * (k1 + k8)
E1 = x1 / (x1 + x2 + x3 + x4)
E2 = x2 / (x1 + x2 + x3 + x4)
E3 = x3 / (x1 + x2 + x3 + x4)
E4 = x4 / (x1 + x2 + x3 + x4)
KmCaAct = 150.0e-6
allo    = 1 / (1 + (KmCaAct / Ca_ss)^2)
JncxNa  = 3 * (E4 * k7 - E1 * k8) + E3 * k4pp - E2 * k3pp
JncxCa  = E2 * k2 - E1 * k1
INaCa_ss = block_ncxss * 0.2 * inaca.Gncx * allo * (JncxNa + 2 * JncxCa)
    desc: Sodium/Calcium exchange current into the T-Tubule subspace
    in [uA/uF]
block_ncxss = 1 ##################

#
# INaK :: Sodium/Potassium ATPase current
# Page 14
#
[inak]
use membrane.V
use extra.Nao, sodium.Nai, sodium.Na_ss
use extra.Ko, potassium.Ki, potassium.K_ss
k1p = 949.5
k1m = 182.4
k2p = 687.2
k2m = 39.4
k3p = 1899.0
k3m = 79300.0
k4p = 639.0
k4m = 40.0
Knai0 = 9.073
Knao0 = 27.78
delta = -0.1550
Knai = Knai0 * exp(delta * V * phys.FRT / 3)
Knao = Knao0 * exp((1.0-delta) * V * phys.FRT / 3)
Kki    = 0.5
Kko    = 0.3582
MgADP  = 0.05
MgATP  = 9.8
Kmgatp = 1.698e-7
H      = 1.0e-7
eP     = 4.2
Khp    = 1.698e-7
Knap   = 224.0
Kxkur  = 292.0
P = eP / (1 + H / Khp + Nai / Knap + Ki / Kxkur)
a1 = (k1p * (Nai / Knai)^3) / ((1 + Nai / Knai)^3 + (1 + Ki / Kki)^2 - 1)
b1 = k1m * MgADP
a2 = k2p
b2 = (k2m * (Nao / Knao)^3) / ((1 + Nao / Knao)^3 + (1 + Ko / Kko)^2 - 1)
a3 = (k3p * (Ko / Kko)^2  ) / ((1 + Nao / Knao)^3 + (1 + Ko / Kko)^2 - 1)
b3 = (k3m * P * H)/(1 + MgATP / Kmgatp)
a4 = (k4p * MgATP / Kmgatp) / (1 + MgATP / Kmgatp)
b4 = (k4m * (Ki / Kki)^2) / ((1 + Nai / Knai)^3 + (1 + Ki / Kki)^2 - 1)
x1 = a4 * a1 * a2 + b2 * b4 * b3 + a2 * b4 * b3 + b3 * a1 * a2
x2 = b2 * b1 * b4 + a1 * a2 * a3 + a3 * b1 * b4 + a2 * a3 * b4
x3 = a2 * a3 * a4 + b3 * b2 * b1 + b2 * b1 * a4 + a3 * a4 * b1
x4 = b4 * b3 * b2 + a3 * a4 * a1 + b2 * a4 * a1 + b3 * b2 * a1
E1 = x1 / (x1 + x2 + x3 + x4)
E2 = x2 / (x1 + x2 + x3 + x4)
E3 = x3 / (x1 + x2 + x3 + x4)
E4 = x4 / (x1 + x2 + x3 + x4)
JnakNa = 3 * (E1 * a3 - E2 * b3)
JnakK  = 2 * (E4 * b1 - E3 * a1)
Pnak = piecewise(cell.mode == 0, base, cell.mode == 1, 0.9*base, 0.7*base)
    base = 30
INaK = (1.0 - parameters.INaK_Block) * Pnak * (JnakNa + JnakK) *if(hff.HCM ==0, 1, hff.f_inak)
    desc: Sodium/Potassium ATPase current
    in [uA/uF]

#
# IKb :: Background Potassium current
# Page 15
#
[ikb]
use membrane.V
xkb = 1 / (1 + exp((V - 14.48) / -18.34))
GKb = if(cell.mode == 1, 0.0018, 0.003)
IKb = GKb * xkb * (V - nernst.EK)
    desc: Background Potassium current
    in [uA/uF]

#
# INab :: Background Sodium current
# Page 15
#
[inab]
use membrane.V
PNab = 3.75e-10
INab = if(hff.HCM == 0, 1, hff.f_inab) * PNab * V * phys.FFRT * (sodium.Nai * evf - extra.Nao) / (evf - 1)
    evf = if(abs(V) < 1e-5, 1.1, (exp(V * phys.FRT)))
    #evf = exp(V * phys.FRT)
    desc: Background Sodium current
    in [uA/uF]

#
# ICab :: Background Calcium current
# Page 15
#
[icab]
use membrane.V
PCab=2.5e-8
ICab = PCab * 4 * V * phys.FFRT * (calcium.Cai * evf2 - 0.341 * extra.Cao) / (evf2 - 1)
    evf2 = if(abs(V) < 1e-5, 1.1, (exp(2 * V * phys.FRT)))
    #evf2 = exp(2 * V * phys.FRT)
    desc: Background Calcium current
    in [uA/uF]

#
# IpCa :: Sarcolemmal Calcium pump current
# Page 15
#
[ipca]
use membrane.V
GpCa = 0.0005
IpCa = GpCa * calcium.Cai / (0.0005 + calcium.Cai)
    desc: Sarcolemmal Calcium pump current
    in [uA/uF]

#
# Jrel :: SR Calcium release flux via Ryanodine receptor
# Page 17
#
[ryr]
use membrane.V
bt=4.75
a_rel=0.5*bt
Jrel_inf = if(cell.mode == 2, 1.7 * base, base)
    base = a_rel * -ical.ICaL / (1 + (1.5 / calcium.Ca_jsr)^8)
dot(Jrelnp) = (Jrel_inf - Jrelnp) / tau_rel
    tau_rel = if(value < 0.001, 0.001, value)
    value = bt / (1.0 + 0.0123 / calcium.Ca_jsr)
btp = 1.25*bt
a_relp = 0.5*btp
Jrel_infp = if(cell.mode == 2, 1.7*base, base)
    base = a_relp * -ical.ICaL / (1 + (1.5 / calcium.Ca_jsr)^8)
dot(Jrelp) = (Jrel_infp - Jrelp) / tau_relp
    tau_relp = if(value < 0.001, 0.001, value)
    value = btp / (1 + 0.0123 / calcium.Ca_jsr)
Jrel = (RF*((1 - camk.f) * Jrelnp + camk.f * Jrelp) + caffeine_factor) * if(hff.HCM == 0, 1, hff.f_ryr)
    desc: SR Calcium release flux via Ryanodine receptor
    in [mmol/L/ms]
caffeine_factor = 0 ##################
RF = 1 ###################

#
# Jup :: Calcium uptake via SERCA pump
# Page 17
#
[serca]
use calcium.Cai, calcium.Ca_jsr, calcium.Ca_nsr
f = if(cell.mode == 1, 1.3, 1)
Jupnp = f * (0.004375 * Cai / (Cai + 0.00092))
Jupp  = f * (2.75 * 0.004375 * Cai / (Cai + 0.00092 - 0.00017))
Jleak = (0.0039375 * Ca_nsr / 15) * if(hff.HCM ==0, 1, hff.f_leak)
    in [mmol/L/ms]
Jup = serfac*((1 - camk.f) * Jupnp + camk.f * Jupp - Jleak) *if(hff.HCM ==0, 1,hff.f_serca)
    desc: Total Ca2+ uptake, via SERCA pump, from myoplasm to nsr
    in [mmol/L/ms]
Jtr = (Ca_nsr - Ca_jsr) / 100
    desc: Ca2+ translocation from nsr to jsr
    in [mmol/L/ms]
serfac = 1 ######################
#
# Diffusion fluxes
# Page 16
#
[diff]
JdiffNa = (sodium.Na_ss - sodium.Nai) / 2
JdiffK  = (potassium.K_ss  - potassium.Ki)  / 2
Jdiff   = (calcium.Ca_ss - calcium.Cai) / 0.2

#
# Intracellular Sodium concentrations
# Page 18
#
[sodium]
use cell.AF, cell.vss, cell.vmyo
INa_tot    = (if(membrane.markov_Na == 1, I_Na_Markov.I_Na_tot, ina.INa)) + inal.INaL + inab.INab + 3*inaca.INaCa + 3*inak.INaK
dot(Nai)   = -INa_tot * AF / vmyo + diff.JdiffNa * vss / vmyo
    desc: Intracellular Potassium concentration
INa_ss_tot = ical.ICaNa + 3*inacass.INaCa_ss
dot(Na_ss) = -INa_ss_tot * AF / vss - diff.JdiffNa

#
# Intracellular Potassium concentrations
# Page 18
#
[potassium]
use cell.AF, cell.vss, cell.vmyo
IK_tot = (ito.Ito
        + ikr.IKr
        + (if(iks.theta ==1, iks.IKs_mut, iks.IKs))
        + ik1.IK1
        + ikb.IKb
        + isk.ISK
        - 2 * inak.INaK
        )
IK_ss_tot = ical.ICaK
dot(Ki)  = -(IK_tot + stimulus.i_stim) * AF / vmyo + diff.JdiffK * vss / vmyo
    desc: Intracellular Potassium concentration
dot(K_ss) = -IK_ss_tot * AF / vss - diff.JdiffK
    desc: Potassium concentration in the T-Tubule subspace

#
# Intracellular Calcium concentrations and buffers
# Page 18
#
[calcium]
use cell.AF, cell.vmyo, cell.vnsr, cell.vjsr, cell.vss
cmdnmax = if(cell.mode == 1, 1.3*base, base)
    base = 0.05
kmcmdn  = 0.00238
trpnmax = 0.07
kmtrpn  = 0.0005
BSRmax  = 0.047
KmBSR   = 0.00087
BSLmax  = 1.124
KmBSL   = 0.0087
csqnmax = 10.0
kmcsqn  = 0.8
ICa_tot = ipca.IpCa + icab.ICab - 2*inaca.INaCa
dot(Cai)  = buff * (-ICa_tot * AF / (2*vmyo) - serca.Jup  * vnsr / vmyo + diff.Jdiff * vss / vmyo )
    buff = 1 / (1 + cmdnmax * kmcmdn / (a*a) + trpnmax * kmtrpn / (b*b))
    a = kmcmdn + calcium.Cai
    b = kmtrpn + calcium.Cai
    desc: Intracellular Calcium concentratium
    in [mmol/L]
ICa_ss_tot = ical.ICaL - 2 * inacass.INaCa_ss
dot(Ca_ss) = buff * (-ICa_ss_tot * AF / (2*vss) + ryr.Jrel * vjsr / vss - diff.Jdiff )
    buff = 1 / (1 + BSRmax * KmBSR / (a*a) + BSLmax * KmBSL / (b*b))
    a = KmBSR + calcium.Ca_ss
    b = KmBSL + calcium.Ca_ss
    desc: Calcium concentratium in the T-Tubule subspace
    in [mmol/L]
dot(Ca_jsr) = buff * (serca.Jtr - ryr.Jrel)
    buff = 1 / (1 + csqnmax * kmcsqn / (a * a))
    a = kmcsqn + calcium.Ca_jsr
    desc: Calcium concentration in the JSR subspace
    in [mmol/L]
dot(Ca_nsr) = serca.Jup - serca.Jtr * vjsr / vnsr
    desc: Calcium concentration in the NSR subspace
    in [mmol/L]
Cai_nano = calcium.Cai * 1E6

#
# CaMKII signalling
#
[camk]
KmCaMK = 0.15
aCaMK  = 0.05
bCaMK  = 0.00068
CaMKo  = 0.05
KmCaM  = 0.0015
CaMKb  = CaMKo * (1.0 - CaMKt) / (1.0 + KmCaM / calcium.Ca_ss)
CaMKa  = (CaMKb + CaMKt) * if(hff.HCM == 0, 1, hff.f_camka)
dot(CaMKt) = aCaMK * CaMKb * CaMKa - bCaMK * CaMKt
f = 1 / (1 + KmCaMK / CaMKa)
    desc: Fraction of phosphorylated channels

[hff]
###### Modifications of Ion Channels based on Passini et al 2016 for HCM ####### 
f_ina = 1
f_inal = 2.65
f_inab = 2.65
f_ical = 1.4
t_ical_fast = 1.35
t_ical_slow = 1.20
f_ito = 0.30
f_ik1 = 0.70
f_ikr = 0.55
f_iks = 0.55
f_inaca = 1.30
f_inak = 0.7
f_serca = 0.75
f_ryr = 0.8
f_leak = 1 #1.3 #3
f_camka = 1 #1.5 ##############
HCM = 1 ####################

[[protocol]]
# Level  Start    Length   Period   Multiplier
1        20       0.5      1000     0

[[script]]
import matplotlib.pyplot as pl
import myokit

#
# This example file uses the O'Hara-Rudy model in epicardial mode to produce
# and display a single AP.
#

# Get model from magic method
m = get_model()

# Set cell type
m.set_value('cell.mode', 1)
types = ['Endocardial', 'Epicardial', 'Midmyocardial']

# Create a pacing protocol
bcl = 1000
p = myokit.pacing.blocktrain(bcl, 0.5, offset=20)

# Create simulation and run
s = myokit.Simulation(m, p)

# Pre-pace for a hundred beats
s.pre(bcl*100)

# Show the next 500ms
d = s.run(bcl)

s.set_constant ('stimulus.amplitude', -40)

d = s.run (bcl,log=d) 

# Display the result
pl.figure()
pl.suptitle('ORd2011 - '+ types[int(m.value('cell.mode'))] +' cell')
pl.plot(d['engine.time'], d['membrane.V'])
pl.title('Membrane potential')
pl.show()

